PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1500, 1000]
  expName = AB
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .117
      text = 1Nina
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  Routine Response
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Enter the first two letters of the first green word.
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    KeyboardComponent key_resp_2
      allowedKeys = 'q','w','e','r','t','y','u','i','o','p','a','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
